# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Frequency Estimator

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: FrequencyEstimator

# Flags for defining signal generator or signal analyzer functionality
signal_analyzer: True
signal_generator: True

# Define if the instrument can be hardware triggered
support_arm: True
support_hardware_loop: True

# General VISA settings for the instrument.
[VISA settings]


# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

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
[State vector, QB1]
datatype: VECTOR
permission: WRITE
unit: V
group: Input
show_in_measurement_dlg: True

[Frequency estimate, QB1]
datatype: DOUBLE
permission: READ
group: Output
unit: Hz
show_in_measurement_dlg: True

[Running frequency estimate, QB1]
datatype: VECTOR
permission: READ
group: Output
unit: Hz
show_in_measurement_dlg: True

[tau]
datatype: DOUBLE
permission: WRITE
group: Input
show_in_measurement_dlg: True
def_value: 1e-6

[Scaling 0]
datatype: DOUBLE
permission: WRITE
def_value: 0
group: Input
show_in_measurement_dlg: True

[Scaling 1]
datatype: DOUBLE
permission: WRITE
def_value: 1
group: Input
show_in_measurement_dlg: True

[Points in estimate]
datatype: DOUBLE
permission: WRITE
group: Input
def_value:10
show_in_measurement_dlg: True

[Step between points]
datatype: DOUBLE
permission: WRITE
group: Input
def_value: 1
show_in_measurement_dlg: True

[Time between points]
datatype: DOUBLE
permission: WRITE
group: Input
def_value: -1
show_in_measurement_dlg: True

[XOR points]
datatype: BOOLEAN
permission: WRITE
group: Input
def_value: 0
show_in_measurement_dlg: True

