# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Manual

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: 

# Default interface settings
interface: None

support_arm: True
support_hardware_loop: True

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

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
[Value 1]
datatype: DOUBLE

[Value 2]
datatype: DOUBLE

[Value 3]
datatype: DOUBLE

[Value 4]
datatype: DOUBLE

[Value 5]
datatype: DOUBLE

[Value 6]
datatype: DOUBLE

[Value 7]
datatype: DOUBLE

[Value 8]
datatype: DOUBLE

[Value 9]
datatype: DOUBLE

[Value 10]
datatype: DOUBLE





